
celsius = 28


//////////////////// VARIABLES /////////////////////



tstop = 600000
nb = 2
nc = 4


FREQ = 25		 	// Stimulation frequency in Hz
NPULSES = 6			// Number of pulses for stimulation

NAV = 0.014 			// Na channel density
KV = 0.004			// K channel density



PUMP = 1
PUMPDENSITY = 0.0006

/////////////////   MORPHOLOGY ///////////////////////


create a, b[nb], c[nc]

a {nseg=100 L=10000 diam = 4}      // peripherial axon

for i=0, nb-1 b[i]{

  nseg = 100
  L = 12000
  diam = 2
  connect b[i](0), a(1)

}
for j=0, nc-1 c[j]{
  
  nseg = 100
  L = 5000
  diam = 1
  if (j <2){

    connect c[j](0), b[0](1)
  }
  if(j>=2){

    connect c[j](0), b[1](1)
  }
}



objref DRG   					// create new object called DRG
DRG = new SectionList()				// Define DRG as a list of sections

a DRG.append()				// DRG sections: tjunction, stem, and soma   
for i=0,1 b[i]{
  
  DRG.append() 
}
for i=0,3 c[i]{
  
  DRG.append()  
} 

/////////////////// INITIALIZATION /////////////////


///// GENERAL INITIALIZATION /////////



proc init(){				// INITIALIZATION FUNCTION



  forall {

       v=-60				// VREST FOR ALL COMPARTMENTS

       finitialize(v)			// reset all state variables
       fcurrent()     			// calculate all currents
       	
       e_pas = -65  //v + (ina + ik)/g_pas	// calculate leak equilibrium potential
  }


}			/// end of initialization




wopen("Fig5coutput2.dat")		    // Open file to write results


///////////////////////// STIMULATE PERIPHERAL AXON /////////////////////

access a	  	    // Work with main axon
objectvar stim			    // create object called stim
stim = new IClamp(0.1)		    // Define stim as a current clamp (IClamp) at position 0.2
stim.del = 5			    // Stimulus delay
stim.dur = tstop		    // Duration of the stimulus
stim.amp = 0          // Amplitude of the stimulus starts as zero.


forall {        // for all compartments

  insert nahh
  gnabar_nahh = NAV
  q10_g_nahh = 1.5

  insert borgkdr      // insert delayed rectifier K channels
  gkdrbar_borgkdr = KV    // density of K channels
  insert ka
  gkabar_ka=0.008

  ek = -70        // K equilibrium potential

  insert pas      // insert leak channels 
  g_pas = 0.000125    // set Rm = 10000 ohms-cm2
  v = -60       // set Vrest

  Ra = 100      // intracellular resistance
}

forsec DRG{


  if (PUMP == 1) {

  insert nadifl

  insert pump
  pumpbar_pump = PUMPDENSITY
  q10_pump = 1.5

  }
}

init()            // initialize

forsec DRG {

if (PUMP == 1){

  ko = 3.72
  ki = 110
  nao = 340

  nai = 90
  nai_nadifl = nai


  fcurrent()
  e_pas = v + (ina+ik)/g_pas   

  }
}


PERIOD_B = 1000/0.7/(2.32^((celsius-6)/10))      // Define period between stimuli
PERIOD = PERIOD_B*0.2/5 
countdown = 0         // Spike interval variable
pulsecount = NPULSES        // Spike number variable


t=0               // Set time variable (t) to zero
dt = 0.025          // Time step in msec


while (t<tstop){                   // Simulation Loop starts here

  a{nai = 90}
  for i=0,1 b[i]{nai = 90}

  stim.amp = 0           // Stimulation amplitude is set to zero

  if ((t>=100) && ((t<300000)||(t>300000))  && (pulsecount > 0) &&(t<tstop)){      // After 50 msec, start stimulating

    if ((countdown <= 0) && (countdown > -1)) stim.amp = 65     // Stimulate 1 ms pulse

    if (countdown <= -1){   // done with this pulse             // End of 1 ms pulse
      countdown = PERIOD                     // Reset interval variable
      pulsecount -= 1            // Decrement count of pulses
      num_pulse +=1
      if(pulsecount==0){
        countdown=PERIOD_B*0.8
        pulsecount=NPULSES
        print t
      }

    }
  }

  if ((t>=100)) countdown -= dt    // Decrement interval variable

  //fprint("%g %g %g %g %g %g %g %g %g\n",t,c[3].v(0.05),c[3].ina_nahh(0.05),c[3].m_nahh(0.05),c[3].h_nahh(.05),c[3].ik_ka(0.05),c[3].m_ka(0.05),c[3].h_ka(.05),c[3].ik_borgkdr(0.05))
  //fprint("%g %g %g %g %g %g %g %g %g\n",t,a.v(0.9),a.nai(.9), b[1].v(0.9),b[1].nai(.9), c[3].v(0.05),c[3].nai(0.05), c[3].v(0.9),c[3].nai(0.9))
  fprint("%g %g %g %g %g %g %g %g %g\n",t,b[1].v(0.9), c[3].v(0.02), c[3].v(0.05),c[3].v(0.08), c[3].v(0.1),c[3].v(0.2), c[3].v(0.3),c[3].v(0.9))

 fadvance()           // Advance simulation one time step     

}




